CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DAPI_Original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI_Original
    Name the primary objects to be identified:DAPI_Objects
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:DAPI_Objects
    Name the output objects:DAPI_Expanded
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:DAPI_Expanded
    Name the output image:Brain_Contour
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:Brain_Contour
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI_Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Contour
    Saved file format:tiff
    Output file location:Elsewhere...|F:\\NeuN-GFAP-Iba1\\Widefiled2\\result\\Dapi_Contour
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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